! XDS.INP generated by CrystalPilot
! *** VERIFY ALL PARAMETERS BEFORE PROCESSING ***

JOB= CORRECT

DETECTOR= EIGER
OVERLOAD= 29991
SENSOR_THICKNESS= 0.45
MINIMUM_VALID_PIXEL_VALUE= 0
!VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS= 6000 30000
TRUSTED_REGION= 0.0 1.05

NX= 4150
NY= 4371
QX= 0.075
QY= 0.075
ORGX= 2008.9
ORGY= 2253.1
DETECTOR_DISTANCE= 197.44

DIRECTION_OF_DETECTOR_X-AXIS= 1.0 0.0 0.0
DIRECTION_OF_DETECTOR_Y-AXIS= 0.0 1.0 0.0
ROTATION_AXIS= 1.0 0.0 0.0
INCIDENT_BEAM_DIRECTION= 0.0 0.0 1.0
FRACTION_OF_POLARIZATION= 0.99
POLARIZATION_PLANE_NORMAL= 0.0 1.0 0.0

X-RAY_WAVELENGTH= 0.979338
OSCILLATION_RANGE= 0.2
STARTING_ANGLE= 5.8851
STARTING_FRAME= 1

NAME_TEMPLATE_OF_DATA_FRAMES= /data/xtal_1/xtal_1_??????.h5
LIB= /root/.crystalpilot/xds/dectris-neggia.so
BACKGROUND_RANGE= 1 10

SPACE_GROUP_NUMBER= 20
UNIT_CELL_CONSTANTS= 99 120 161 90 90 90
!EXCLUDE_DATA_RANGE= 
FRIEDEL'S_LAW= TRUE

!SIGNAL_PIXEL= 
!STRICT_ABSORPTION_CORRECTION= 
MINIMUM_I/SIGMA= 1
REFLECTIONS/CORRECTION_FACTOR= 5000
!REFINE(INTEGRATE)= 
!INCLUDE_RESOLUTION_RANGE= 
!RESOLUTION_SHELLS= 
!MINIMUM_FRACTION_OF_INDEXED_SPOTS= 
DATA_RANGE= 1 1800
SPOT_RANGE= 1 450
SPOT_RANGE= 1351 1800